PsychoPy2experiment version="2020.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1024, 700]
  expName = marker_builder
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Routines
  Routine markerSender
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        # Set up LabStreamingLayer stream.
        info = StreamInfo(name='PsychoPySimpleMarker', type='Markers', channel_count=1,
                          channel_format='double64', source_id='unique012346')
        chns = info.desc().append_child("channels")
        #MarkerValue is value of marker
        for label in ["MarkerValue"]:
            ch = chns.append_child("channel")
            ch.append_child_value("label", label)
            ch.append_child_value("type", "Marker")
        info.desc().append_child_value("manufacturer", "PsychoPyBuilder")

        # Initialize the stream.
        outlet = StreamOutlet(info)
      Begin Routine:
        outlet.push_sample(x=[marker])  # Push event marker.
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = "Send marker has value: " + str($marker)
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Flow
  LoopInitiator markers loopType="TrialHandler"
    conditionsFile = marker_data.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('marker', 1)]),
      OrderedDict([('marker', 2)]),
      OrderedDict([('marker', 23)]),
      OrderedDict([('marker', 44)]),
      OrderedDict([('marker', 54)]),
      OrderedDict([('marker', 43)]),
      OrderedDict([('marker', 43)]),
      OrderedDict([('marker', 45)]),
      OrderedDict([('marker', 34)]),
      OrderedDict([('marker', 78)]),
      OrderedDict([('marker', 12)]),
      OrderedDict([('marker', 32)]),
      OrderedDict([('marker', 4)]),
      OrderedDict([('marker', 5)]),
      OrderedDict([('marker', 56)]),
      OrderedDict([('marker', 63)]),
      OrderedDict([('marker', 89)]),
      OrderedDict([('marker', 44)]),
      OrderedDict([('marker', 55)]),
      OrderedDict([('marker', 94)])]
    Routine markerSender
  LoopTerminator markers
